PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = Primingexp._IshikaKori_AU2320248
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True)
    SliderComponent studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test
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    TextComponent testtext
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit 
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book '},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse '},
      {'study_word': 'case'},
      {'study_word': 'pastry'},
      {'study_word': 'key'},
      {'study_word': 'police '},
      {'study_word': 'poster'},
      {'study_word': 'Table'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 't_hi_t'},
      {'test_word': '_ou_e'},
      {'test_word': 'p_str_'},
      {'test_word': 'c_s_'},
      {'test_word': '_ru_s_'},
      {'test_word': 'p_li_e'},
      {'test_word': '_or_d'},
      {'test_word': '_a_ble'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io_'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine Test
  LoopTerminator trials_2
