PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'counterbalance': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = Soloproject_AU2320248_IshikaKori
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Welcome  to the Experiment, please proceed with the Instructions.
  Routine Main
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        left_stim_text = ''
        right_stim_text = ''
        if expInfo['counterbalance'] == '0':
            bindings = {'X': 'm', 'O': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans='z'
        elif expInfo['counterbalance'] == '1':
            bindings = {'O': 'm', 'X': 'z'}
            if thisTrial['condition'] == 'incongruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'm'
            elif thisTrial['condition'] == 'congruent':
                if thisTrial['stim'] == 'X':
                    left_stim_text = thisTrial['stim']
                    right_stim_text = ''
                    ans = 'z'
                elif thisTrial['stim'] == 'O':
                    left_stim_text = ''
                    right_stim_text = thisTrial['stim']
                    ans = 'm'
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent left_stim
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $left_stim_text
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    TextComponent right_stim
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $right_stim_text
    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'z', 'm'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instruction
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        *In this Task, you will see letters X or O, appearing either the left or the right side of the screen.  Your job is to respond based on the identity of the letter and not it's location.

        Press 'M' if the letter is X.
        Press 'Z' if the letter is O.

        Please respond as quick and accurately as possible.
        Each trial will diappear automatically after 2 seconds if you do not respond.

        Please press 'SPACE' to being with the Experiment.
    KeyboardComponent to_the_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thankuu
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for Participanting, your responses are collected. 
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Flow
  Routine WelcomeScreen
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_file.csv
    loopType = random
    nReps = 25
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    conditions:
      [OrderedDict([('condition', 'incongruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'X')]),
      OrderedDict([('condition', 'incongruent'), ('stim', 'O')]),
      OrderedDict([('condition', 'congruent'), ('stim', 'O')])]
    Routine Main
  LoopTerminator trials
  Routine thankuu
